CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Organoids
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Opening:[module_num:5|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
    Select the input image:Organoids
    Name the output image:Opening
    Structuring element:disk,25

Closing:[module_num:6|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
    Select the input image:Opening
    Name the output image:Closing
    Structuring element:disk,25

ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Closing
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:8|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
    Select the input image:ImageAfterMath
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:9|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
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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